PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = attentionbias
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Routines
  Routine active_condition
    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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    TextComponent probe
      color = black
      letterHeight = 0.15
      pos [set every repeat] = $[probe_position_x, probe_position_y]
      startVal [time (s)] = 1.5
      text = .
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    ImageComponent top_image
      image [set every repeat] = $image1
      pos [set every repeat] = $[image1_position_x, image1_position_y]
      size = (0.4, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    ImageComponent bottom_image
      image [set every repeat] = $image2
      pos [set every repeat] = $[image2_position_x, image2_position_y]
      size = (0.4, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    TextComponent fixation_cross
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        if ((condition === "A")) {
            continueRoutine = true;
        }
      Each JS Frame:
        continueRoutine = false;
  Routine training_block
    TextComponent fixation_cross_training
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent top_text
      color = black
      letterHeight = 0.1
      pos [set every repeat] = $[top_word_position_x, top_word_position_y]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $top_word
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    TextComponent bottom_text
      color = black
      letterHeight = 0.1
      pos [set every repeat] = $[bottom_word_position_x, bottom_word_position_y]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $bottom_word
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    TextComponent probe_training
      color = black
      letterHeight = 0.15
      pos [set every repeat] = $[training_probe_position_x, training_probe_position_y]
      startVal [time (s)] = 1.5
      text = .
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    KeyboardComponent key_resp_2
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine disclaimer
    KeyboardComponent key_resp_3
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        NOTE FROM JOHN:

        The follow is an attention-bias modification (dot probe and visual dot probe task, in this case) program based on the design by Amir et al. (2009).

        This is a demo version with one training and one experimental block.

        This experiment has a training block (16 trials), where lexical stimuli is used to avert training carryover effects for the visual stimuli during the experimental block (20 trials). Participants are randomized into either an active or control condition. In the active condition, 80% of trials show neutral-negative and 20% of trials show neutral-neutral. All active trials replace the neutral image with a probe. In the control condition, half of the 80% of trials replace the negative image. 500ms is the global delay for inter-trial delay, duration of fixation cross, and duration of stimuli presentation. Nonwithstanding the heterogeneity in ABM and the psychometric concerns, this recreation was done for educational purposes.

        Press [ENTER] to proceed.


        References:

        Amir, N., Beard, C., Taylor, C. T., Klumpp, H., Elias, J., Burns, M., & Chen, X. (2009). Attention training in individuals with generalized social phobia: A randomized controlled trial. Journal of consulting and clinical psychology, 77(5), 961–973. https://doi.org/10.1037/a0016685
    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        experimental_trials = 0;
        condition = "";
        coin_flip = Math.random();

        // pick one condition randomly
        if (coin_flip > .5) {
            condition = "A";
        } else {
            condition = "B";
        };
  Routine instructions
    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention-Bias Modification Task!

        The purpose of this experiment is to measure how quick you are at pressing the correct button following the presentation of two stimulus.

        Once you’ve signed the written informed consent and are ready, please press [ENTER] to proceed.
    KeyboardComponent key_resp_4
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine training_instructions
    TextComponent text_3
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS (PRACTICE)

        In this experiment, a cross will briefly appear in the center of the screen, followed by two words or pictures. One will be at the top and one will be at the bottom. These words/pictures will also only show up momentarily — they will be replaced with a dot.

        Your job is to press the keyboard button [UP] or [DOWN] depending on where the cross is.

        Let’s try a few practice runs. Press [ENTER] to proceed.
    KeyboardComponent key_resp_5
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine experimental_instructions
    TextComponent text_4
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS

        Great work!

        Now for the actual experiment. In the next set of trials, you will notice that instead of words, you will see pictures.

        Your job remains the same: Press [UP] or [DOWN] depending on where the dot replaces the image.

        Press [ENTER] to begin.
    KeyboardComponent key_resp_6
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine conclusion
    TextComponent text_5
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Well done, the experiment is now over!

        Thank you for your participation. A research assistant will be in shortly to debrief you and provide you with your monetary compensation for your time.

        Please press [ENTER] to exit the experiment.
    KeyboardComponent key_resp_7
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine control_condition
    KeyboardComponent key_resp_8
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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    TextComponent fixation_cross_control
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent top_image_control
      image [set every repeat] = $image1
      pos [set every repeat] = $[image1_position_x, image1_position_y]
      size = (0.4, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    ImageComponent bot_image_control
      image [set every repeat] = $image2
      pos [set every repeat] = $[image2_position_x, image2_position_y]
      size = (0.4, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    TextComponent control_probe
      color = black
      letterHeight = 0.15
      pos [set every repeat] = $[probe_position_x, probe_position_y]
      startVal [time (s)] = 1.5
      text = .
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    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        if ((condition === "B")) {
            continueRoutine = true;
        }
        else if ((condition === "A")) {
            continueRoutine = false;
        }
Flow
  Routine disclaimer
  Routine instructions
  Routine training_instructions
  LoopInitiator training_loop loopType="TrialHandler"
    conditionsFile = dotprobe_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, -0.25]), ('bottom_word_position', [0, 0.25]), ('training_probe_position', [0, 0.25])]),
      OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, -0.25]), ('bottom_word_position', [0, 0.25]), ('training_probe_position', [0, 0.25])]),
      OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, -0.25]), ('bottom_word_position', [0, 0.25]), ('training_probe_position', [0, -0.25])]),
      OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, -0.25]), ('bottom_word_position', [0, 0.25]), ('training_probe_position', [0, -0.25])]),
      OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, 0.25]), ('bottom_word_position', [0, -0.25]), ('training_probe_position', [0, 0.25])]),
      OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, 0.25]), ('bottom_word_position', [0, -0.25]), ('training_probe_position', [0, 0.25])]),
      OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, 0.25]), ('bottom_word_position', [0, -0.25]), ('training_probe_position', [0, -0.25])]),
      OrderedDict([('top_word', 'slake'), ('bottom_word', 'shake'), ('top_word_position', [0, 0.25]), ('bottom_word_position', [0, -0.25]), ('training_probe_position', [0, -0.25])])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
    Routine training_block
  LoopTerminator training_loop
  Routine experimental_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dotprobe.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, 0.25]), ('constAns', 'up')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, 0.25]), ('constAns', 'up')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, 0.25]), ('constAns', 'up')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, 0.25]), ('constAns', 'up')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, -0.25]), ('image2_position', [0, 0.25]), ('probe_position', [0, -0.25]), ('constAns', 'down')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, -0.25]), ('image2_position', [0, 0.25]), ('probe_position', [0, -0.25]), ('constAns', 'down')])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
    Routine active_condition
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = dotprobe_control.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, 0.25]), ('constAns', 'up')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, 0.25]), ('constAns', 'up')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, -0.25]), ('constAns', 'down')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, 0.25]), ('image2_position', [0, -0.25]), ('probe_position', [0, -0.25]), ('constAns', 'down')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, -0.25]), ('image2_position', [0, 0.25]), ('probe_position', [0, -0.25]), ('constAns', 'down')]),
      OrderedDict([('trial_type', 'neut-negative'), ('image1', 'neutral.jpg'), ('image2', 'negative.jpg'), ('image1_position', [0, -0.25]), ('image2_position', [0, 0.25]), ('probe_position', [0, -0.25]), ('constAns', 'down')])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
    Routine control_condition
  LoopTerminator trials_2
  Routine conclusion
