PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1152, 720]
  expName = stroop
  exportHTML = on Save
  logging level = debug
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Routines
  Routine conclusion
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in our online study.

        A Research Assistant will debrief you shortly and provide you with your monetary compensation.

        Please press [ENTER] to end the experiment.
    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine practice
    TextComponent practice_text
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys = 'r','g','y','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions
    TextComponent instructions_welcome
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Emotional Stroop Task!

        The purpose of this task is to measure your accuracy and delay in choosing the correct colour of the word.

        Once you’ve agreed and signed the written informed consent, please press [ENTER].
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine practice_instructions
    TextComponent practice_instructions2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        A series of words will display in one of four colours: Red, Yellow, Green, and Blue.

        Words and colour combinations are randomized.

        Your goal is to press the corresponding first letter of the word’s COLOUR. For example, if the word is “BUCKET” and was in the color RED, you would press the [R] key.

        Let’s start with a practice session. Once you’re ready to proceed, press [ENTER].
    KeyboardComponent end_practice_instructions
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine pause
    TextComponent Pause
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent end_pause
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_instructions_B
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Nice it works!
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  Routine pause_2
  Routine mixed_condition
    CodeComponent code_3
      Code Type = JS
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      Begin JS Routine:
        continueRoutine = false;
        if ((condition === "A")) {
            continueRoutine = true;
        }
      Each JS Frame:
        continueRoutine = false;
        if ((condition === "A")) {
            continueRoutine = true;
        }
      End JS Routine:
        if ((condition === "A")) {
            experimental_trials++;
            console.log(experimental_trials);
        }
    TextComponent condition_text
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','g','y'
      correctAns = $constAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine experimental_instructions
    TextComponent instructions2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        GREAT JOB!

        You’ve completed the practice block!

        Now for the actual experiment. Remember, try your best to press the correct corresponding first letter for the colour of the word.

        For example, if ‘SOAP’ was colour BLUE, you would press [B].

        Once you’re ready to proceed, press [ENTER].
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        console.log(condition);
  Routine AB_negative
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine AB_neutral_2
    TextComponent text_3
      color = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine mixed_pause
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        continueRoutine = False

        if experimental_trials == 20:
            continueRoutine = True
        if experimental_trials == 40:
            continueRoutine = True
        if experimental_trials == 60:
            continueRoutine = True
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Please take a break if you find it necessary. We would appreciate it if you took no longer than a one-minute pause.

        Once you’re ready to continue, press [ENTER].
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AB_negative_2
  Routine AB_pause_2
  Routine AB2_pause
    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        continueRoutine = False

        if experimental_trials == 60:
            continueRoutine = True
    TextComponent text_9
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Please take a break if you find it necessary. We would appreciate it if you took no longer than a one-minute pause.

        Once you’re ready to continue, press [ENTER].
    KeyboardComponent key_resp_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine disclaimer
    CodeComponent code_8
      Code Type = JS
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      Begin JS Experiment:
        experimental_trials = 0;
        condition = "";
        coin_flip = Math.random();

        // pick one condition randomly
        if (coin_flip > .5) {
            condition = "A";
        } else {
            condition = "B";
        };
    TextComponent text_10
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        NOTE FROM JOHN:

        The following experiment is a replication of the Emotional Stroop Task. This version features lexical stimuli (neutral and negative words), matched word list (in terms of frequency and valence), built-in random assignment (mixed vs. counter-balanced — neutral then emotional block), a training block of 25 trials, four experimental blocks of 20 trials, and a 500ms inter-trial delay.

        The purpose of this replication was to 1) familiarize myself with PsychoPy and PsychoJS, and 2) adhere to replication guidelines specifically for the Emotional Stroop Task (Ben-Haim et al., 2016). If you are interested, I discuss the recreation process and lessons further on my website: johndejesus.com/#experiments


        Please press [ENTER] to proceed.



        References:

        Ben-Haim, M. S., Williams, P., Howard, Z., Mama, Y., Eidels, A., & Algom, D. (2016). The Emotional Stroop Task: Assessing Cognitive Performance under Exposure to Emotional Content. Journal of visualized experiments : JoVE, (112), 53720.

        Scott, G. G., O’Donnell, P. J., Leuthold, H., & Sereno, S. C. (2009). Early emotion word processing: Evidence from event-related potentials. Biological psychology, 80(1), 95-104.

        Kahan, T. A., & Hely, C. D. (2008). The role of valence and frequency in the emotional Stroop task. Psychonomic bulletin & review, 15(5), 956-960.
    KeyboardComponent key_resp_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine AB1_neutral
    CodeComponent code_5
      Code Type = JS
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      Begin JS Routine:
        continueRoutine = false;
        if ((condition === "A")) {
            continueRoutine = false;
        }
        if ((condition === "B")) {
            continueRoutine = true;
        }
      Each JS Frame:
        continueRoutine = false;
        if ((condition === "A")) {
            continueRoutine = false;
        }
        if ((condition === "B")) {
            continueRoutine = true;
        }
      End JS Routine:
        if ((condition === "B")) {
            experimental_trials++;
            console.log(experimental_trials);
        }
    TextComponent text_7
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_8
      allowedKeys = 'r','g','b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine AB1_pause
    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        continueRoutine = False

        if experimental_trials == 20:
            continueRoutine = True
        if experimental_trials == 39:
            continueRoutine = True
    KeyboardComponent key_resp_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Please take a break if you find it necessary. We would appreciate it if you took no longer than a one-minute pause.

        Once you’re ready to continue, press [ENTER].
  Routine AB2_negative
    CodeComponent code_6
      Code Type = JS
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      Begin JS Routine:
        continueRoutine = false;
        if ((condition === "A")) {
            continueRoutine = false;
        }
        if ((condition === "B")) {
            continueRoutine = true;
        }
      Each JS Frame:
        continueRoutine = false;
        if ((condition === "A")) {
            continueRoutine = false;
        }
        if ((condition === "B")) {
            continueRoutine = true;
        }
      End JS Routine:
        if ((condition === "B")) {
            experimental_trials++;
            console.log(experimental_trials);
        }
    TextComponent text_8
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_9
      allowedKeys = 'r','g','y','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine disclaimer
  Routine instructions
  Routine practice_instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = strooplist_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'odd'), ('colour', 'red'), ('constAns', 'r')]),
      OrderedDict([('word', 'iron'), ('colour', 'blue'), ('constAns', 'b')]),
      OrderedDict([('word', 'book'), ('colour', 'yellow'), ('constAns', 'y')]),
      OrderedDict([('word', 'army'), ('colour', 'green'), ('constAns', 'g')]),
      OrderedDict([('word', 'tool'), ('colour', 'red'), ('constAns', 'r')]),
      OrderedDict([('word', 'bowl'), ('colour', 'blue'), ('constAns', 'b')]),
      OrderedDict([('word', 'wine'), ('colour', 'yellow'), ('constAns', 'y')]),
      OrderedDict([('word', 'rock'), ('colour', 'green'), ('constAns', 'g')]),
      OrderedDict([('word', 'hide'), ('colour', 'red'), ('constAns', 'r')]),
      OrderedDict([('word', 'stiff'), ('colour', 'blue'), ('constAns', 'b')]),
      OrderedDict([('word', 'clock'), ('colour', 'yellow'), ('constAns', 'y')]),
      OrderedDict([('word', 'rough'), ('colour', 'green'), ('constAns', 'g')]),
      OrderedDict([('word', 'cold'), ('colour', 'red'), ('constAns', 'r')]),
      OrderedDict([('word', 'hotel'), ('colour', 'blue'), ('constAns', 'b')]),
      OrderedDict([('word', 'bench'), ('colour', 'yellow'), ('constAns', 'y')]),
      OrderedDict([('word', 'coast'), ('colour', 'green'), ('constAns', 'g')]),
      OrderedDict([('word', 'paint'), ('colour', 'red'), ('constAns', 'r')]),
      OrderedDict([('word', 'watch'), ('colour', 'blue'), ('constAns', 'b')]),
      OrderedDict([('word', 'fabric'), ('colour', 'yellow'), ('constAns', 'y')]),
      OrderedDict([('word', 'excuse'), ('colour', 'green'), ('constAns', 'g')]),
      OrderedDict([('word', 'yellow'), ('colour', 'red'), ('constAns', 'r')])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
    Routine practice
  LoopTerminator practice_loop
  Routine experimental_instructions
  LoopInitiator mixed_loop loopType="TrialHandler"
    Selected rows = 1:80
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'demon'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'shark'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'rude'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'rage'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')]),
      OrderedDict([('word', 'toxic'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'venom'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'slap'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'snake'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')]),
      OrderedDict([('word', 'devil'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'annoy'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'detest'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'tumour'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')]),
      OrderedDict([('word', 'betray'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'sinful'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'insult'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'scared'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')])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
    Routine mixed_condition
    Routine mixed_pause
  LoopTerminator mixed_loop
  LoopInitiator AB1_loop loopType="TrialHandler"
    Selected rows = 41:82
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'demon'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'shark'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'rude'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'rage'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')]),
      OrderedDict([('word', 'toxic'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'venom'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'slap'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'snake'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')]),
      OrderedDict([('word', 'devil'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'annoy'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'detest'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'tumour'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')]),
      OrderedDict([('word', 'betray'), ('colour', 'red'), ('neg_neut', 0), ('constAns', 'r')]),
      OrderedDict([('word', 'sinful'), ('colour', 'blue'), ('neg_neut', 0), ('constAns', 'b')]),
      OrderedDict([('word', 'insult'), ('colour', 'yellow'), ('neg_neut', 0), ('constAns', 'y')]),
      OrderedDict([('word', 'scared'), ('colour', 'green'), ('neg_neut', 0), ('constAns', 'g')])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
    Routine AB1_neutral
    Routine AB1_pause
  LoopTerminator AB1_loop
  LoopInitiator AB2_loop loopType="TrialHandler"
    Selected rows = 0:41
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine AB2_negative
    Routine AB2_pause
  LoopTerminator AB2_loop
  Routine conclusion
